<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenRigs.Video;assembly=OpenRigs.Video"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExposureTime" />
        <Property Name="Gain" />
        <Property Name="Binning" />
        <Property Name="SerialNumber" />
        <Property Name="ColorProcessing" />
        <Property Name="PixelFormat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:TriggeredSpinnaker">
          <spk:Index xsi:nil="true" />
          <spk:ColorProcessing>Default</spk:ColorProcessing>
          <p1:ExposureTime>19000</p1:ExposureTime>
          <p1:Gain>0</p1:Gain>
          <p1:Binning>1</p1:Binning>
          <p1:PixelFormat>Mono8</p1:PixelFormat>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Image as Image,
new(ChunkData.FrameID as FrameID,
ChunkData.Timestamp as Timestamp,
ChunkData.ExposureTime as ExposureTime,
ChunkData.Gain as Gain,
ChunkData.Width as Width,
ChunkData.Height as Height) as ChunkData)</scr:Expression>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CameraTriggerEventsSubjectName" Description="The name of the subject carrying trigger events from a camera controller or behavior board. " Category="Subjects" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTriggerEvents</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="FrameEventsSubjectName" Description="The name of the subject to which indexed, timestamped camera frames are published" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>FrameEvents</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>